PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1707, 960]
  color = 1.0000, 1.0000, 1.0000
  expName = run
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
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      text:
        在下面的任务中，请感受指尖的触碰
                   按空格键继续
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        from triggerBox import TriggerNeuracle
        import random

        trigger = TriggerNeuracle()

        targetlist = []

        Aim = [0, 1, 2, 3, 4]
        for i in range(6):
            random.shuffle(Aim)
            targetlist += Aim.copy()
  Routine run
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    ImageComponent F1
      image = 图片/F1-removebg-preview.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
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    ImageComponent F2
      image = 图片/F2-removebg-preview.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
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    ImageComponent F3
      image = 图片/F3-removebg-preview.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
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    ImageComponent F4
      image = 图片/F4-removebg-preview.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
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    ImageComponent F5
      image = 图片/F5-removebg-preview.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        Bx = [F1, F2, F3, F4, F5]
        for mm in range(5):
            Bx[mm].setPos([10, 0])
        Bx[targetlist[F_ind]].setPos([0, 0])

        win.callOnFlip(trigger.send_trigger, 0x01+targetlist[F_ind])
  Routine prep
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = xtime
      text = 请准备
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = xtime
      text = 目标
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    SoundComponent sound_1
      sound = 音频/请准备.wav
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        F_ind = 0
      Begin Routine:
        xtime = 1.4 + 0.4 * random.random()
        text_4.setText(str(targetlist[F_ind]+1))
  Routine rest
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    ImageComponent rest_fig_2
      image = 图片/静息-removebg-preview.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4.5
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    SoundComponent sound_3
      sound = 音频/ding.wav
      startVal [time (s)] = 2.5
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    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        F_ind += 1
        win.callOnFlip(trigger.send_trigger,0x00)
Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 30
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    Routine prep
    Routine run
    Routine rest
  LoopTerminator trials
