PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1207, 720]
  color = 1.0000, 1.0000, 1.0000
  expName = run
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
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      text:
        在下面的任务中，请主动执行屏幕上的手势
                气动手也会同步运动
                   按空格键继续
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        from trigger_box import TriggerNeuracle
        import random
        import socket

        # trigger = TriggerNeuracle('COM10')
        client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        client_socket.settimeout(5)  # 设置连接超时时间为 5 秒
        try:
            client_socket.connect(('127.0.0.1', 65432))
            print("连接成功！")
        except socket.timeout:
            print("连接超时！")
        except Exception as e:
            print(f"发生错误: {e}")
        Trial_len = tuple(random.uniform(2.5, 6) for _ in range(28))

        Ges = []
        Aim = [0, 1, 2, 3, 4, 5, 6]
        for i in range(4):
            random.shuffle(Aim)
            Ges += Aim.copy()
  Routine run
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        ###########################################################################
        runComponents = [Thumb, Index, Middle, Ring, Little, Grasp, Pinch, Six, Scissors, Seven]
        rtime = Trial_len[F_ind]
        client_socket.send(str(Ges[F_ind]+1).encode('utf-8'))
        for i in range(0, 10):
            runComponents[i].setPos((100, 0))
        runComponents[Ges[F_ind]].setPos((0, 0))

        # win.callOnFlip(trigger.send_trigger, Ges[F_ind])
    ImageComponent Thumb
      image = 图片/thumb-removebg-preview.png
      size = (1.0, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = rtime
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    ImageComponent Index
      image = 图片/index-removebg-preview.png
      size = (1.0, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = rtime
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    ImageComponent Middle
      image = 图片/middle-removebg-preview.png
      size = (1.0, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = rtime
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    ImageComponent Ring
      image = 图片/ring-removebg-preview.png
      size = (1.0, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = rtime
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    ImageComponent Little
      image = 图片/little-removebg-preview.png
      size = (1.0, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = rtime
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    ImageComponent Grasp
      image = 图片/grasp-removebg-preview.png
      size = (1.0, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = rtime
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    ImageComponent Pinch
      image = 图片/double-removebg-preview.png
      size = (1.0, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = rtime
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    ImageComponent Six
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = rtime
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    ImageComponent Scissors
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = rtime
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    ImageComponent Seven
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = rtime
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  Routine prep
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = xtime
      text = 请准备
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    SoundComponent sound_1
      sound = 音频/请准备.wav
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        F_ind = 0
      Begin Routine:
        xtime = 1.4 + 0.4 * random.random()
  Routine rest
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    ImageComponent rest_fig_2
      image = 图片/静息-removebg-preview.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        client_socket.send('0'.encode('utf-8'))
        F_ind += 1

        # win.callOnFlip(trigger.send_trigger,0x00)
Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 20
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    Routine prep
    Routine run
    Routine rest
  LoopTerminator trials
